#Things to measure: scintillator height/radius/material, radioactive Source material, type of radiation (in radSource)

##################
#    Preamble    #
#                #
##################
/control/execute verbose.mac
/control/execute visu.mac

###################
#   Configuring   #
#                 #
###################

# Create world
/gate/geometry/setMaterialDatabase GateMaterials.db 
/gate/world/geometry/setXLength 0.2 m
/gate/world/geometry/setYLength 0.2 m
/gate/world/geometry/setZLength 0.2 m
/gate/world/setMaterial Air

# Create Scintillating Slab
/gate/world/daughters/name scintillator
/gate/world/daughters/systemType OpticalSystem
/gate/world/daughters/insert cylinder
/gate/scintillator/setMaterial ptpppo #Scintillating material
/gate/scintillator/geometry/setRmin 0 mm
/gate/scintillator/geometry/setRmax 20 mm # Measure this every time please!
/gate/scintillator/geometry/setHeight 4 mm # Measure this every time please!
/gate/scintillator/geometry/setPhiStart 0 deg
/gate/scintillator/geometry/setDeltaPhi 360 deg
/gate/scintillator/vis/setColor yellow

/gate/scintillator/daughters/name crystal
/gate/scintillator/daughters/insert cylinder
/gate/crystal/setMaterial ptpppo
/gate/crystal/geometry/setRmin 0 mm
/gate/crystal/geometry/setRmax 20 mm
/gate/crystal/geometry/setHeight 4 mm
/gate/crystal/geometry/setPhiStart 0 deg
/gate/crystal/geometry/setDeltaPhi 360 deg
/gate/systems/scintillator/crystal/attach crystal

/gate/crystal/daughters/name pixel
/gate/crystal/daughters/insert cylinder
/gate/pixel/setMaterial ptpppo
/gate/pixel/geometry/setRmin 0 mm
/gate/pixel/geometry/setRmax 20 mm
/gate/pixel/geometry/setHeight 0.4 mm
/gate/pixel/geometry/setPhiStart 0 deg
/gate/pixel/geometry/setDeltaPhi 360 deg
/gate/pixel/repeaters/insert linear
/gate/pixel/linear/setRepeatNumber 10
/gate/pixel/linear/setRepeatVector 0. 0. 0.4 mm

/gate/pixel/attachCrystalSD
/gate/systems/scintillator/pixel/attach pixel

#Shielding tape mask
/gate/world/daughters/name tape
/gate/world/daughters/insert cylinder
/gate/tape/geometry/setRmin 0 mm
/gate/tape/geometry/setRmax 20 mm
/gate/tape/geometry/setHeight 1 mm
/gate/tape/geometry/setPhiStart 0 deg
/gate/tape/geometry/setDeltaPhi 360 deg
/gate/tape/vis/setColor gray
/gate/tape/setMaterial ETape

# Create strontium (or other) source
/gate/world/daughters/name radioactiveSource
/gate/world/daughters/insert cylinder
/gate/radioactiveSource/setMaterial Air #Can't have strontium cus it blows up :(
/gate/radioactiveSource/geometry/setRmin 0 mm
/gate/radioactiveSource/geometry/setRmax 1 mm
/gate/radioactiveSource/geometry/setHeight 1 mm
/gate/radioactiveSource/geometry/setPhiStart 0 deg
/gate/radioactiveSource/geometry/setDeltaPhi 360 deg
/gate/radioactiveSource/vis/setColor green
/gate/radioactiveSource/placement/setTranslation 0 0 4 cm
/gate/radioactiveSource/repeaters/insert linear
/gate/radioactiveSource/linear/setRepeatNumber 10
/gate/radioactiveSource/linear/setRepeatVector 0. 0. 1. mm
/gate/radioactiveSource/linear/autoCenter true

###############
# Information #
#             #
###############

/gate/physics/addPhysicsList emstandard #Use higher _opt(number) suffix for more precision
/gate/physics/Electron/SetCutInRegion scintillator  0.04 mm
/gate/physics/Gamma/SetCutInRegion scintillator 0.04 mm
/gate/physics/SetMaxStepSizeInRegion scintillator 0.04 mm

##################
#  Moving Parts  #
#                #
##################


#############
# Save File #
#           #
#############

#Root output
/gate/output/root/enable
#/gate/output/root/setFileName scintillatorOutput #uncomment for root file (even visual!) output
/gate/output/root/setRootHitFlag 1

# Energy Deposition readout
/gate/actor/addActor DoseActor edepReadout
/gate/actor/edepReadout/save slabROut.txt #Comment this one out if you don't want to record
/gate/actor/edepReadout/stepHitType random
/gate/actor/edepReadout/attachTo scintillator
/gate/actor/edepReadout/setSize 1000 1000 4 mm
/gate/actor/edepReadout/setResolution 1 1 30
/gate/actor/edepReadout/enableDose false
/gate/actor/edepReadout/enableEdep true

/gate/run/initialize



#Radiation source

/gate/source/addSource radSource gps

/gate/source/radSource/gps/pos/type Volume
/gate/source/radSource/gps/pos/shape Cylinder
/gate/source/radSource/gps/pos/radius 10 mm
/gate/source/radSource/gps/pos/halfz 100 mm
/gate/source/radSource/gps/pos/centre 0. 0. 0. m
# /gate/source/radSource/attachTo radioactiveSource

/gate/source/radSource/gps/particle e- # Measure
/gate/source/radSource/gps/energytype UserSpectrum # Spectrum file taken from a paper for strontium 90
/gate/source/radSource/gps/setSpectrumFile ../data/strontiumSpectrum.txt
/gate/source/radSource/gps/ang/type iso
/gate/source/radSource/gps/ang/mintheta 0. deg
/gate/source/radSource/gps/ang/maxtheta 180. deg
/gate/source/radSource/gps/ang/minphi 0. deg
/gate/source/radSource/gps/ang/maxphi 360. deg
#/gate/source/radSource/gps/direction  0 0 -1
/gate/source/radSource/gps/pos/confine radioactiveSource_phys

/gate/source/radSource/visualize 3000 green 5

/gate/application/setTotalNumberOfPrimaries 100000
/gate/application/start #Start er up!
